/* BeginDocumentation
Name: hh_psc_alpha_nestml - Hodgkin Huxley neuron model.

Description:

 hh_psc_alpha is an implementation of a spiking neuron using the Hodkin-Huxley
 formalism.

 (1) Post-syaptic currents
 Incoming spike events induce a post-synaptic change of current modelled
 by an alpha function. The alpha function is normalised such that an event of
 weight 1.0 results in a peak current of 1 pA.


 (2) Spike Detection
 Spike detection is done by a combined threshold-and-local-maximum search: if
 there is a local maximum above a certain threshold of the membrane potential,
 it is considered a spike.

Parameters:

 The following parameters can be set in the status dictionary.

 V_m        double - Membrane potential in mV
 E_L        double - Resting membrane potential in mV.
 g_L        double - Leak conductance in nS.
 C_m        double - Capacity of the membrane in pF.
 tau_ex     double - Rise time of the excitatory synaptic alpha function in ms.
 tau_in     double - Rise time of the inhibitory synaptic alpha function in ms.
 E_Na       double - Sodium reversal potential in mV.
 g_Na       double - Sodium peak conductance in nS.
 E_K        double - Potassium reversal potential in mV.
 g_K        double - Potassium peak conductance in nS.
 Act_m      double - Activation variable m
 Act_h      double - Activation variable h
 Inact_n    double - Inactivation variable n
 I_e        double - Constant external input current in pA.

Problems/Todo:

 better spike detection
 initial wavelet/spike at simulation onset

References:

 Spiking Neuron Models:
 Single Neurons, Populations, Plasticity
 Wulfram Gerstner, Werner Kistler,  Cambridge University Press

 Theoretical Neuroscience:
 Computational and Mathematical Modeling of Neural Systems
 Peter Dayan, L. F. Abbott, MIT Press (parameters taken from here)

 Hodgkin, A. L. and Huxley, A. F.,
 A Quantitative Description of Membrane Current
 and Its Application to Conduction and Excitation in Nerve,
 Journal of Physiology, 117, 500-544 (1952)

Sends: SpikeEvent

Receives: SpikeEvent, CurrentEvent, DataLoggingRequest

Authors: Schrader
SeeAlso: hh_cond_exp_traub
*/
neuron hh_psc_alpha_nestml:

  state:
    V_m mV = -65. mV # Membrane potential
    g_ex pA  # inputs from the exc conductance
    g_in pA  # inputs from the inh conductance

    alias alpha_n real = ( 0.01 * ( V_m + 55. ) ) / ( 1. - exp( -( V_m + 55. ) / 10. ) )
    alias beta_n real = 0.125 * exp( -( V_m + 65. ) / 80. )
    alias alpha_m  real = ( 0.1 * ( V_m + 40. ) ) / ( 1. - exp( -( V_m + 40. ) / 10. ) )
    alias beta_m  real = 4. * exp( -( V_m + 65. ) / 18. )
    alias alpha_h  real = 0.07 * exp( -( V_m + 65. ) / 20. )
    alias beta_h  real = 1. / ( 1. + exp( -( V_m + 35. ) / 10. ) )

    Act_m real =  alpha_m / ( alpha_m + beta_m )
    Act_h real = alpha_h / ( alpha_h + beta_h )
    Inact_n real =  alpha_n / ( alpha_n + beta_n )

    alias I_Na  real = g_Na * Act_m * Act_m * Act_m * Act_h * ( V_m - E_Na );
    alias I_K   real  = g_K * Inact_n * Inact_n * Inact_n * Inact_n * ( V_m - E_K );
    alias I_L   real = g_L * ( V_m - E_L );
  end

  equations:
    I_syn_exc pA = g_ex # TODO I_sum(g_ex, spikeExc)
    I_syn_inh pA = g_in # TODO I_sum(g_in, spikeInh)
    V_m' =( -( I_Na + I_K + I_L ) + I_stim + I_e + I_syn_inh + I_syn_exc ) / C_m

    Act_m' = alpha_m * ( 1 - Act_m ) - beta_m * Act_m # m-variable
    Act_h' = alpha_h * ( 1 - Act_h ) - beta_h * Act_h # h-variable
    Inact_n' = alpha_n * ( 1 - Inact_n ) - beta_n * Inact_n # n-variable

    # synapses: alpha functions
    g_ex'' = -g_ex' / tau_syn_ex
    g_ex' = g_ex' - ( g_ex / tau_syn_ex )

    g_in'' = -g_in' / tau_syn_in
    g_in' = g_in' - ( g_in / tau_syn_in )
  end

  parameter:
    t_ref ms = 2.0       # Refractory period in ms
    g_Na nS = 12000.0      # Threshold Potential in mV
    g_K nS = 3600.0
    g_L nS = 30
    C_m pF = 100.0       # Membrane Capacitance in pF
    E_Na mV = 50
    E_K mV = -77.
    E_L mV = -54.402     # Leak reversal Potential (aka resting potential) in mV
    tau_syn_ex ms = 0.2    # Synaptic Time Constant Excitatory Synapse in ms
    tau_syn_in ms = 2.0    # Synaptic Time Constant for Inhibitory Synapse in ms
    I_e pA = 0           # Constant Current in pA
  end

  internal:
    # Impulse to add to DG_EXC on spike arrival to evoke unit-amplitude
    # conductance excursion.
    PSConInit_E real = 1.0 * e / tau_syn_ex

    # Impulse to add to DG_INH on spike arrival to evoke unit-amplitude
    # conductance excursion.
    PSConInit_I real = 1.0 * e / tau_syn_in

    # refractory time in steps
    r integer
    RefractoryCounts integer = steps(t_ref)

   # Input current injected by CurrentEvent.
   # This variable is used to transport the current applied into the
   # _dynamics function computing the derivative of the state vector.
   I_stim pA = 0
  end

  input:
      spikeInh   <- inhibitory spike
      spikeExc   <- excitatory spike
      currents <- current
  end

  output: spike

  update:
    U_old mV = V_m
    integrate(V_m)

    if r > 0:
      r -= 1
    elif V_m > 0 and U_old > V_m:
      r = RefractoryCounts
      emit_spike()
    end

    I_stim = currents.getSum()

    g_ex' += spikeExc.getSum() * PSConInit_E;
    g_in' += spikeInh.getSum() * PSConInit_I;
  end

end
