"""
iaf_cond_beta - Simple conductance based leaky integrate-and-fire neuron model
##############################################################################

Description
+++++++++++

iaf_cond_beta is an implementation of a spiking neuron using IAF dynamics with
conductance-based synapses. Incoming spike events induce a post-synaptic change
of conductance modelled by a beta function. The beta function
is normalised such that an event of weight 1.0 results in a peak current of
1 nS at :math:`t = \tau_{rise\_[ex|in]}`.


References
++++++++++

.. [1] Meffin H, Burkitt AN, Grayden DB (2004). An analytical
       model for the large, fluctuating synaptic conductance state typical of
       neocortical neurons in vivo. Journal of Computational Neuroscience,
       16:159-175.
       DOI: https://doi.org/10.1023/B:JCNS.0000014108.03012.81
.. [2] Bernander O, Douglas RJ, Martin KAC, Koch C (1991). Synaptic background
       activity influences spatiotemporal integration in single pyramidal
       cells.  Proceedings of the National Academy of Science USA,
       88(24):11569-11573.
       DOI: https://doi.org/10.1073/pnas.88.24.11569
.. [3] Kuhn A, Rotter S (2004) Neuronal integration of synaptic input in
       the fluctuation- driven regime. Journal of Neuroscience,
       24(10):2345-2356
       DOI: https://doi.org/10.1523/JNEUROSCI.3349-03.2004
.. [4] Rotter S,  Diesmann M (1999). Exact simulation of time-invariant linear
       systems with applications to neuronal modeling. Biologial Cybernetics
       81:381-402.
       DOI: https://doi.org/10.1007/s004220050570
.. [5] Roth A and van Rossum M (2010). Chapter 6: Modeling synapses.
       in De Schutter, Computational Modeling Methods for Neuroscientists,
       MIT Press.


See also
++++++++

iaf_cond_exp, iaf_cond_alpha
"""
neuron iaf_cond_beta:
  state:
    r integer             # counts number of tick during the refractory period
  end

  initial_values:
    V_m mV = E_L          # membrane potential
    g_in nS = 0 nS        # inputs from the inh conductance
    g_in' nS/ms = 0 nS/ms # inputs from the inh conductance
    g_ex nS = 0 nS        # inputs from the exc conductance
    g_ex' nS/ms = 0 nS/ms # inputs from the exc conductance
  end

  equations:
      g_in'' = -g_in'/tau_syn_rise_I
      g_in' = g_in' - g_in/tau_syn_decay_I

      g_ex'' = -g_ex'/tau_syn_rise_E
      g_ex' = g_ex' -g_ex/tau_syn_decay_E

      function I_syn_exc pA = (F_E + convolve(g_ex, spikeExc)) * ( V_m - E_ex )
      function I_syn_inh pA = (F_I + convolve(g_in, spikeInh)) * ( V_m - E_in )
      function I_leak pA = g_L * ( V_m - E_L ) # pa = nS * mV
      V_m' =  (-I_leak - I_syn_exc - I_syn_inh + I_e + I_stim ) / C_m
  end

  parameters:
    E_L mV = -85.0 mV # Leak reversal Potential (aka resting potential)
    C_m pF = 250.0 pF # Capacity of the membrane
    t_ref ms = 2.0 ms # Refractory period
    V_th mV = -55.0 mV      # Threshold Potential
    V_reset mV = -60.0 mV   # Reset Potential
    E_ex mV = 0 mV          # Excitatory reversal Potential
    E_in mV = -85.0 mV      # Inhibitory reversal Potential
    g_L nS = 16.6667 nS     # Leak Conductance
    tau_syn_rise_I ms = 0.2 ms    # Synaptic Time Constant Excitatory Synapse
    tau_syn_decay_I ms = 2.0 ms   # Synaptic Time Constant for Inhibitory Synapse
    tau_syn_rise_E ms = 0.2 ms    # Synaptic Time Constant Excitatory Synapse
    tau_syn_decay_E ms = 2.0 ms   # Synaptic Time Constant for Inhibitory Synapse
    F_E nS = 0 nS            # Constant External input conductance (excitatory).
    F_I nS = 0 nS            # Constant External input conductance (inhibitory).

    # constant external input current
    I_e pA = 0 pA
  end

  internals:

    # conductance excursion.
    PSConInit_E 1/ms = e / tau_syn_rise_E

    # Impulse to add to g_in' on spike arrival to evoke unit-amplitude
    # conductance excursion.
    PSConInit_I 1/ms = e / tau_syn_rise_I

    RefractoryCounts integer = steps(t_ref) # refractory time in steps
  end

  input:
    spikeInh nS <- inhibitory spike
    spikeExc nS <- excitatory spike
    I_stim pA <- current
  end

  output: spike

  update:

    integrate_odes()
    if r != 0: # not refractory
      r =  r - 1
      V_m = V_reset # clamp potential

    elif V_m >= V_th:
      r = RefractoryCounts
      V_m = V_reset # clamp potential
      emit_spike()

    end

    g_ex' += spikeExc * PSConInit_E
    g_in' += spikeInh * PSConInit_I
  end

end
