"""
traub_psc_alpha - Traub model according to Borgers 2017
#######################################################

Reduced Traub-Miles Model of a Pyramidal Neuron in Rat Hippocampus [1]_.
parameters got from reference [2]_.

Incoming spike events induce a post-synaptic change of current modelled
by an alpha function.

References
++++++++++

.. [1] R. D. Traub and R. Miles, Neuronal Networks of the Hippocampus,Cam- bridge University Press, Cambridge, UK, 1991.
.. [2] Borgers, C., 2017. An introduction to modeling neuronal dynamics (Vol. 66). Cham: Springer.


See also
++++++++

hh_cond_exp_traub
"""
model traub_psc_alpha_neuron:
    state:
        V_m mV = V_m_init    # Membrane potential
        V_m_old mV = V_m_init    # Membrane potential at previous timestep for threshold check
        refr_t ms = 0 ms    # Refractory period timer
        is_refractory boolean = false

        Act_m real =  alpha_m_init / ( alpha_m_init + beta_m_init )     # Activation variable m for Na
        Inact_h real = alpha_h_init / ( alpha_h_init + beta_h_init )    # Inactivation variable h for Na
        Act_n real =  alpha_n_init / ( alpha_n_init + beta_n_init )     # Activation variable n for K

    equations:
        # synapses: alpha functions
        kernel K_syn_inh = (e/tau_syn_inh) * t * exp(-t/tau_syn_inh)
        kernel K_syn_exc = (e/tau_syn_exc) * t * exp(-t/tau_syn_exc)

        inline I_syn_exc pA = convolve(K_syn_exc, exc_spikes) * pA
        inline I_syn_inh pA = convolve(K_syn_inh, inh_spikes) * pA
        inline I_Na  pA = g_Na * Act_m * Act_m * Act_m * Inact_h * ( V_m - E_Na )
        inline I_K   pA  = g_K * Act_n * Act_n * Act_n * Act_n * ( V_m - E_K )
        inline I_L   pA = g_L * ( V_m - E_L )

        # Act_n
        inline alpha_n real = 0.032 * (V_m / mV + 52.) / (1. - exp(-(V_m / mV + 52.) / 5.))
        inline beta_n  real = 0.5 * exp(-(V_m / mV + 57.) / 40.)
        Act_n' = ( alpha_n * ( 1 - Act_n ) - beta_n * Act_n ) / ms # n-variable

        # Act_m
        inline alpha_m real = 0.32 * (V_m / mV + 54.) / (1.0 - exp(-(V_m / mV + 54.) / 4.))
        inline beta_m  real = 0.28 * (V_m / mV + 27.) / (exp((V_m / mV + 27.) / 5.) - 1.)
        Act_m' = ( alpha_m * ( 1 - Act_m ) - beta_m * Act_m ) / ms # m-variable

        # Inact_h'
        inline alpha_h real = 0.128 * exp(-(V_m / mV + 50.0) / 18.0)
        inline beta_h  real = 4.0 / (1.0 + exp(-(V_m / mV + 27.) / 5.))
        Inact_h' = ( alpha_h * ( 1 - Inact_h ) - beta_h * Inact_h ) / ms # h-variable

        V_m' = ( -( I_Na + I_K + I_L ) + I_e + I_stim + I_syn_exc - I_syn_inh ) / C_m

    parameters:
        V_m_init mV = -70 mV     # Initial membrane potential
        C_m pF = 100 pF           # Membrane capacitance
        g_Na nS = 10000 nS        # Sodium peak conductance
        g_K nS = 8000 nS          # Potassium peak conductance
        g_L nS = 10 nS            # Leak conductance
        E_Na mV = 50 mV           # Sodium reversal potential
        E_K mV = -100 mV          # Potassium reversal potential
        E_L mV = -67 mV           # Leak reversal potential (aka resting potential)
        V_Tr mV = -20 mV          # Spike threshold
        refr_T ms = 2 ms          # Duration of refractory period

        tau_syn_exc ms = 0.2 ms   # Rise time of the excitatory synaptic alpha function
        tau_syn_inh ms = 2 ms     # Rise time of the inhibitory synaptic alpha function

        # constant external input current
        I_e pA = 0 pA

    internals:
        alpha_n_init real = 0.032 * (V_m / mV + 52.) / (1. - exp(-(V_m / mV + 52.) / 5.))
        beta_n_init  real = 0.5 * exp(-(V_m / mV + 57.) / 40.)
        alpha_m_init real = 0.32 * (V_m / mV + 54.) / (1.0 - exp(-(V_m / mV + 54.) / 4.))
        beta_m_init  real = 0.28 * (V_m / mV + 27.) / (exp((V_m / mV + 27.) / 5.) - 1.)
        alpha_h_init real = 0.128 * exp(-(V_m / mV + 50.0) / 18.0)
        beta_h_init  real = 4.0 / (1.0 + exp(-(V_m / mV + 27.) / 5.))

    input:
        exc_spikes <- excitatory spike
        inh_spikes <- inhibitory spike
        I_stim pA <- continuous

    output:
        spike

    update:
        if is_refractory:
            refr_t -= resolution()
        V_m_old = V_m
        integrate_odes()

    onCondition(not is_refractory and V_m > 0 mV and V_m_old > V_m):
        # threshold crossing and maximum
        refr_t = refr_T    # start of the refractory period
        is_refractory = true
        emit_spike()

    onCondition(refr_t <= resolution() / 2):
        # end of refractory period
        refr_t = 0 ms
        is_refractory = false

