/*
  A straight forward implementation of the RC circuit approach.
  Extends firing model with an additional refractory state. It is entered directly after a spike is fired.
*/
neuron rc_refractory:

  state:
    refractory_counts integer = 0
  end

  initial_values:
    V_m mV = E_L
  end

  equations:
    V_m' = -(V_m - E_L)/tau_m  + I_syn/C_m
  end

  parameters:
    E_L   mV = -70mV
    C_m   pF = 250pF
    tau_m ms = 10ms
    I_syn pA = 10pA
    function V_th mV = -55mV - E_L
    function V_reset mV = -65mV - E_L
    refractory_timeout ms = 5ms
  end

  input:
    spikes nS <- spike
  end

  output: spike

  update:
    if refractory_counts == 0:
      integrate_odes()
      if V_m > V_th:
        V_m = V_reset
        emit_spike()
        refractory_counts = steps(refractory_timeout)
      end
    else:
      refractory_counts -= 1
    end
  end


end