/*
  A straight forward implementation of the RC circuit approach.
  Extends firing model with an additional refractory state. It is entered directly after a spike is fired.
*/
neuron rc_alpha:

  state:
    V_abs mV = 0mV
    alias V_m mV = V_abs + E_L
    g_ex pA = 0pA    # inputs from the inh conductance
  end

  equations:
    g_ex'' = -g_ex' / tau_syn_ex
    g_ex' = g_ex' - ( g_ex / tau_syn_ex )
    I_syn pA = g_ex + currents
    V_abs' = -V_abs/tau_m  + I_syn/C_m
  end

  parameter:
    E_L   mV = -65mV
    C_m   pF = 250pF
    tau_m ms = 10ms

    alias V_th mV = -55mV - E_L
    alias V_reset mV = -65mV - E_L
    refractory_timeout ms = 5ms
    refractory_counts integer = 0
  end

  internal:
    tau_syn_ex ms = 2.0ms
    PSConInit_E real = 1.0 * e / tau_syn_ex
  end

  input:
    spikes   <- spike
    currents <- current
  end

  output: spike

  update:
    if refractory_counts == 0:
      integrate(V_abs)
      if V_abs > V_th:
        V_abs = V_reset
        emit_spike()
        refractory_counts = steps(refractory_timeout)
      end
    else:
      refractory_counts -= 1
    end

    g_ex' = PSConInit_E * spikes.get_sum()
  end

end