"""
Like iaf_psc_exp, but with an output port of the wrong type (current instead of spiking)
"""
neuron iaf_psc_exp:

  state:
    r integer                               # counts number of tick during the refractory period
  end

  initial_values:
    V_abs mV = 0 mV
  end

  equations:
    shape I_shape_in = exp(-1/tau_syn_in*t)
    shape I_shape_ex = exp(-1/tau_syn_ex*t)
    recordable inline V_m mV = V_abs + E_L # Membrane potential.
    inline I_syn pA = convolve(I_shape_in, in_spikes) + convolve(I_shape_ex, ex_spikes) + I_e + I_stim
    V_abs' = -V_abs / tau_m + I_syn / C_m
  end

  parameters:
    C_m pF = 250 pF       # Capacity of the membrane
    tau_m ms = 10 ms      # Membrane time constant
    tau_syn_in ms = 2 ms  # Time constant of synaptic current
    tau_syn_ex ms = 2 ms  # Time constant of synaptic current
    t_ref ms = 2 ms       # Duration of refractory period
    E_L  mV = -70 mV      # Resting potential
    V_reset mV = -70 mV - E_L # reset value of the membrane potential
    Theta   mV = -55 mV - E_L # Threshold, RELATIVE TO RESTING POTENTIAL (!).
                                   # I.e. the real threshold is (E_L_+V_th_)

    # constant external input current
    I_e pA = 0 pA
  end

  internals:
    RefractoryCounts integer = steps(t_ref) # refractory time in steps
  end

  input:
    ex_spikes pA <- excitatory spike
    in_spikes pA <- inhibitory spike
    I_stim pA <- current
  end

  output: current

  update:
    if r == 0: # neuron not refractory, so evolve V
      integrate_odes()
    else:
      r = r - 1 # neuron is absolute refractory
    end

    if V_abs >= Theta: # threshold crossing
      r = RefractoryCounts
      V_abs = V_reset
      emit_spike()
    end

  end

end
