# aeif_cond_beta - Conductance based exponential integrate-and-fire neuron model
###############################################################################
#
# Description
# +++++++++++
#
# A version of the aeif_cond_beta neuron model that contains an ``integrate_odes()`` call without arguments. For testing gap junction code generation.
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
model aeif_cond_beta_neuron:

    state:
        V_m mV = E_L       # Membrane potential
        w pA = 0 pA        # Spike-adaptation current
        r integer = 0      # Counts number of tick during the refractory period

        # inputs from the inhibitory conductance
        g_in real = 0
        g_in$ real = g_I_const * (1 / tau_syn_rise_I - 1 / tau_syn_decay_I)

        # inputs from the excitatory conductance
        g_ex real = 0
        g_ex$ real = g_E_const * (1 / tau_syn_rise_E - 1 / tau_syn_decay_E)

    equations:
        inline V_bounded mV = min(V_m, V_peak) # prevent exponential divergence
        kernel g_in' = g_in$ - g_in / tau_syn_rise_I,
               g_in$' = -g_in$ / tau_syn_decay_I

        kernel g_ex' = g_ex$ - g_ex / tau_syn_rise_E,
               g_ex$' = -g_ex$ / tau_syn_decay_E

        # Add inlines to simplify the equation definition of V_m
        inline exp_arg real = (V_bounded - V_th) / Delta_T
        inline I_spike pA = g_L * Delta_T * exp(exp_arg)
        inline I_syn_exc pA = unit_psg * convolve(g_ex, exc_spikes) * (V_bounded - E_exc)
        inline I_syn_inh pA = unit_psg * convolve(g_in, inh_spikes) * (V_bounded - E_inh)

        V_m' = (-g_L * (V_bounded - E_L) + I_spike - I_syn_exc - I_syn_inh - w + I_e + I_stim) / C_m
        w' = (a * (V_bounded - E_L) - w) / tau_w

    parameters:
        # membrane parameters
        C_m pF = 281 pF           # Membrane capacitance
        t_ref ms = 0.0 ms         # Refractory period
        V_reset mV = -60 mV       # Reset potential
        g_L nS = 30 nS            # Leak conductance
        E_L mV = -70.6 mV         # Leak reversal potential (a.k.a. resting potential)

        # spike adaptation parameters
        a nS = 4 nS               # Subthreshold adaptation
        b pA = 80.5 pA            # Spike-triggered adaptation
        Delta_T mV = 2.0 mV       # Slope factor
        tau_w ms = 144.0 ms       # Adaptation time constant
        V_th mV = -50.4 mV        # Threshold potential
        V_peak mV = 0 mV          # Spike detection threshold

        # synaptic parameters
        E_exc mV = 0 mV              # Excitatory reversal potential
        E_inh mV = -85.0 mV          # Inhibitory reversal potential
        tau_syn_rise_I ms = .2 ms    # Synaptic time constant inhibitory synapse
        tau_syn_decay_I ms = 2 ms    # Synaptic time constant for inhibitory synapse
        tau_syn_rise_E ms = .2 ms    # Synaptic time constant excitatory synapse
        tau_syn_decay_E ms = 2 ms    # Synaptic time constant for excitatory synapse

        # constant external input current
        I_e pA = 0 pA

    internals:
        # time of peak conductance excursion after spike arrival at t = 0
        t_peak_E real = tau_syn_decay_E * tau_syn_rise_E * ln(tau_syn_decay_E / tau_syn_rise_E) / (tau_syn_decay_E - tau_syn_rise_E)
        t_peak_I real = tau_syn_decay_I * tau_syn_rise_I * ln(tau_syn_decay_I / tau_syn_rise_I) / (tau_syn_decay_I - tau_syn_rise_I)

        # normalisation constants to ensure arriving spike yields peak conductance of 1 nS
        g_E_const real = 1 / (exp(-t_peak_E / tau_syn_decay_E) - exp(-t_peak_E / tau_syn_rise_E))
        g_I_const real = 1 / (exp(-t_peak_I / tau_syn_decay_I) - exp(-t_peak_I / tau_syn_rise_I))

        # refractory time in steps
        RefractoryCounts integer = steps(t_ref)

        unit_psg nS = 1 nS     # Unitary postsynaptic conductance amplitude

        unit_psg nS = 1 nS         # Unitary postsynaptic conductance amplitude

    input:
        exc_spikes <- spike
        inh_spikes <- spike
        I_stim pA <- continuous

    output:
        spike

    update:
        integrate_odes()

        if r > 0: # refractory
            r -= 1 # decrement refractory ticks count
            V_m = V_reset # clamp potential
        elif V_m >= V_peak: # threshold crossing detection
            r = RefractoryCounts
            V_m = V_reset # clamp potential
            w += b
            emit_spike()
