# test_continuous_third_factor_in_modulatory_spikes_handler_neuron
# ################################################################
#
# Description
# +++++++++++
#
# Like ``iaf_psc_exp``, but with a dummy postsynaptic third-factor variable.
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
model test_continuous_third_factor_in_modulatory_spikes_handler_neuron:

    state:
        V_m mV = E_L    # Membrane potential
        refr_t ms = 0 ms    # Refractory period timer
        I_syn_exc pA = 0 pA
        I_syn_inh pA = 0 pA
        e_trace_dend real = 42

    equations:
        I_syn_exc' = -I_syn_exc / tau_syn_exc
        I_syn_inh' = -I_syn_inh / tau_syn_inh
        V_m' = -(V_m - E_L) / tau_m + (I_syn_exc - I_syn_inh + I_e + I_stim) / C_m
        refr_t' = -1    # refractoriness is implemented as an ODE, representing a timer counting back down to zero at a rate of one second per second

    parameters:
        C_m pF = 250 pF           # Capacitance of the membrane
        tau_m ms = 10 ms          # Membrane time constant
        tau_syn_inh ms = 2 ms     # Time constant of inhibitory synaptic current
        tau_syn_exc ms = 2 ms     # Time constant of excitatory synaptic current
        refr_T ms = 2 ms          # Duration of refractory period
        E_L mV = -70 mV           # Resting potential
        V_reset mV = -70 mV       # Reset value of the membrane potential
        V_th mV = -55 mV          # Spike threshold potential

        # constant external input current
        I_e pA = 0 pA

    internals:
        unit_psc pA = 1 pA       # Unitary postsynaptic current amplitude

    input:
        exc_spikes <- excitatory spike
        inh_spikes <- inhibitory spike
        I_stim pA <- continuous

    output:
        spike

    update:
        if refr_t > 0 ms:
            # neuron is absolute refractory, do not evolve V_m
            integrate_odes(I_syn_exc, I_syn_inh, refr_t)
        else:
            # neuron not refractory
            integrate_odes(I_syn_exc, I_syn_inh, V_m)

    onReceive(exc_spikes):
        I_syn_exc += unit_psc * exc_spikes * 1 s

    onReceive(inh_spikes):
        I_syn_inh += unit_psc * inh_spikes * 1 s

    onCondition(refr_t <= 0 ms and V_m >= V_th):
        # threshold crossing
        refr_t = refr_T    # start of the refractory period
        V_m = V_reset
        emit_spike()
